<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="GLUT4" cmeta:id="metaid0">
  <units name="mM">
    <unit prefix="milli" units="mole" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="uM">
    <unit prefix="micro" units="mole" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="C_per_mol">
    <unit units="coulomb" />
    <unit exponent="-1.0" units="mole" />
  </units>
  <units name="per_sec">
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="J_per_mol">
    <unit units="joule" />
    <unit exponent="-1.0" units="mole" />
  </units>
  <units name="fS">
    <unit prefix="femto" units="siemens" />
  </units>
  <units name="J_per_K_per_mol">
    <unit units="joule" />
    <unit exponent="-1.0" units="mole" />
    <unit exponent="-1.0" units="kelvin" />
  </units>
  <units name="fC">
    <unit prefix="femto" units="coulomb" />
  </units>
  <units name="per_sec_per_fmol_per_L">
    <unit exponent="-1.0" units="fmol_per_L" />
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="fA">
    <unit prefix="femto" units="ampere" />
  </units>
  <units name="fmol">
    <unit prefix="femto" units="mole" />
  </units>
  <units name="fmol_per_L_per_sec">
    <unit exponent="-1.0" units="second" />
    <unit units="fmol_per_L" />
  </units>
  <units name="fmol_per_L">
    <unit exponent="-1.0" units="litre" />
    <unit prefix="femto" units="mole" />
  </units>
  <units name="pL">
    <unit prefix="pico" units="litre" />
  </units>
  <units name="mM_per_sec">
    <unit exponent="-1.0" units="second" />
    <unit units="mM" />
  </units>
  <units name="per_fmol">
    <unit exponent="-1.0" units="fmol" />
  </units>
  <units name="fF">
    <unit prefix="femto" units="farad" />
  </units>
  <units name="uM_per_sec">
    <unit exponent="-1.0" units="second" />
    <unit units="uM" />
  </units>
  <units name="fmol_per_sec">
    <unit units="fmol" />
    <unit exponent="-1.0" units="second" />
  </units>
  <component name="GLUT4">
    <variable cmeta:id="GLUT4.t" name="t" units="second" />
    <variable cmeta:id="GLUT4.K_Ai" initial_value="1" name="K_Ai" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_Ai" initial_value="0.011" name="q_Ai" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.K_Ao" initial_value="100" name="K_Ao" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_Ao" initial_value="0.01" name="q_Ao" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.K_Bi" initial_value="10" name="K_Bi" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_Bi" initial_value="0.001" name="q_Bi" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.K_Bo" initial_value="100" name="K_Bo" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_Bo" initial_value="0.0031" name="q_Bo" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.K_Ei" initial_value="1" name="K_Ei" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_Ei" initial_value="1" name="q_Ei" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.K_Eo" initial_value="1000" name="K_Eo" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_Eo" initial_value="1" name="q_Eo" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.K_EAi" initial_value="1" name="K_EAi" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_EAi" initial_value="1" name="q_EAi" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.K_EAo" initial_value="1" name="K_EAo" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_EAo" initial_value="1" name="q_EAo" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.K_EBi" initial_value="1" name="K_EBi" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_EBi" initial_value="1" name="q_EBi" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.K_EBo" initial_value="1" name="K_EBo" public_interface="out" units="per_fmol" />
    <variable cmeta:id="GLUT4.q_EBo" initial_value="1" name="q_EBo" public_interface="out" units="fmol" />
    <variable cmeta:id="GLUT4.kappa_Re1" initial_value="1" name="kappa_Re1" public_interface="out" units="fmol_per_sec" />
    <variable cmeta:id="GLUT4.kappa_Re2" initial_value="1" name="kappa_Re2" public_interface="out" units="fmol_per_sec" />
    <variable cmeta:id="GLUT4.kappa_Re3" initial_value="1" name="kappa_Re3" public_interface="out" units="fmol_per_sec" />
    <variable cmeta:id="GLUT4.kappa_Re4" initial_value="1" name="kappa_Re4" public_interface="out" units="fmol_per_sec" />
    <variable cmeta:id="GLUT4.kappa_Re5" initial_value="1" name="kappa_Re5" public_interface="out" units="fmol_per_sec" />
    <variable cmeta:id="GLUT4.kappa_Re6" initial_value="1" name="kappa_Re6" public_interface="out" units="fmol_per_sec" />
    <variable cmeta:id="GLUT4.J_GLUT" name="J_GLUT" units="fmol_per_sec" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>J_GLUT</ci>
        <apply>
          <times />
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless" type="e-notation">
            1
            <sep />
            -1
          </cn>
          <apply>
            <minus />
            <apply>
              <minus />
              <apply>
                <times />
                <ci>kappa_Re1</ci>
                <ci>K_Ai</ci>
                <ci>kappa_Re2</ci>
                <ci>K_Ao</ci>
                <ci>q_Ao</ci>
              </apply>
              <apply>
                <times />
                <ci>kappa_Re3</ci>
                <ci>K_Bi</ci>
                <ci>K_EBi</ci>
                <ci>q_Bi</ci>
              </apply>
            </apply>
            <apply>
              <times />
              <ci>kappa_Re4</ci>
              <ci>q_EAo</ci>
              <ci>q_Bo</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>K_Ai</ci>
        </apply>
        <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">0</cn>
      </apply>
    </math>
  </component>
  <rdf:RDF xmlns:bqmodel="http://biomodels.net/model-qualifiers/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:opb="http://bhi.washington.edu/OPB#">
    <rdf:Description rdf:about="#GLUT4.q_Bo">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_3">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#entity_5">
              <ro:part_of>
                <rdf:Description rdf:about="#entity_3">
                  <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/fma/FMA:70022" />
                </rdf:Description>
              </ro:part_of>
              <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/chebi/CHEBI:29101" />
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#GLUT4.q_Ao">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_1">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#entity_2">
              <ro:part_of rdf:resource="#entity_3" />
              <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/chebi/CHEBI:17234" />
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#GLUT4.q_Bi">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_2">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#entity_4">
              <ro:part_of>
                <rdf:Description rdf:about="#entity_1">
                  <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/fma/FMA:226050" />
                </rdf:Description>
              </ro:part_of>
              <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/chebi/CHEBI:29101" />
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#GLUT4.q_Ai">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_0">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#entity_0">
              <ro:part_of rdf:resource="#entity_1" />
              <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/chebi/CHEBI:17234" />
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#metaid0" semsim:modelName="GLUT4_0" />
  </rdf:RDF>
</model>

