<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="GLUT2_flux" cmeta:id="metaid0">
  <units name="per_M_per_second">
    <unit exponent="-1.0" units="M" />
    <unit exponent="-1.0" units="second" />
    <unit exponent="-1.0" units="M" />
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="umol_per_s">
    <unit exponent="-1.0" units="second" />
    <unit prefix="micro" units="mole" />
  </units>
  <units name="umol">
    <unit prefix="micro" units="mole" />
  </units>
  <units name="M">
    <unit exponent="-1.0" units="litre" />
    <unit units="mole" />
  </units>
  <units name="per_second">
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="m3">
    <unit exponent="3.0" units="metre" />
  </units>
  <component name="GLUT2">
    <variable cmeta:id="GLUT2.t" name="t" units="second" />
    <variable cmeta:id="GLUT2.K_12" initial_value="1000" name="K_12" units="per_M_per_second" />
    <variable cmeta:id="GLUT2.K_21" initial_value="12.6" name="K_21" units="per_second" />
    <variable cmeta:id="GLUT2.K_23" initial_value="1350" name="K_23" units="per_second" />
    <variable cmeta:id="GLUT2.K_32" initial_value="90" name="K_32" units="per_second" />
    <variable cmeta:id="GLUT2.K_34" initial_value="12.6" name="K_34" units="per_second" />
    <variable cmeta:id="GLUT2.K_43" initial_value="1000" name="K_43" units="per_M_per_second" />
    <variable cmeta:id="GLUT2.K_41" initial_value="0.8" name="K_41" units="per_second" />
    <variable cmeta:id="GLUT2.K_14" initial_value="12" name="K_14" units="per_second" />
    <variable cmeta:id="GLUT2.glucose_i" initial_value="0.011" name="glucose_i" units="M" />
    <variable cmeta:id="GLUT2.glucose_s" initial_value="10e-3" name="glucose_s" units="M" />
    <variable cmeta:id="GLUT2.K_S" name="K_S" units="M" />
    <variable cmeta:id="GLUT2.J_GLUT" name="J_GLUT" units="umol_per_s" />
    <variable cmeta:id="GLUT2.C_tot" name="C_tot" units="umol" />
    <variable cmeta:id="GLUT2.n_GLUT" initial_value="140000000" name="n_GLUT" units="dimensionless" />
    <variable cmeta:id="GLUT2.D" name="D" units="per_second" />
    <variable cmeta:id="GLUT2.v_cell" initial_value="6e-16" name="v_cell" units="m3" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>C_tot</ci>
        <apply>
          <divide />
          <ci>n_GLUT</ci>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="per_umole" type="e-notation">
            6.022
            <sep />
            17
          </cn>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>K_S</ci>
        <apply>
          <divide />
          <ci>K_21</ci>
          <ci>K_12</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>J_GLUT</ci>
        <apply>
          <times />
          <apply>
            <divide />
            <ci>C_tot</ci>
            <ci>D</ci>
          </apply>
          <apply>
            <minus />
            <apply>
              <divide />
              <apply>
                <times />
                <ci>K_23</ci>
                <ci>K_41</ci>
                <ci>glucose_i</ci>
              </apply>
              <ci>K_S</ci>
            </apply>
            <apply>
              <divide />
              <apply>
                <times />
                <ci>K_32</ci>
                <ci>K_14</ci>
                <ci>glucose_s</ci>
              </apply>
              <ci>K_S</ci>
            </apply>
          </apply>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless" type="e-notation">
            36
            <sep />
            8
          </cn>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>D</ci>
        <apply>
          <plus />
          <apply>
            <times />
            <apply>
              <plus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">1</cn>
              <apply>
                <divide />
                <ci>glucose_i</ci>
                <ci>K_S</ci>
              </apply>
            </apply>
            <apply>
              <plus />
              <apply>
                <divide />
                <apply>
                  <times />
                  <ci>K_32</ci>
                  <ci>glucose_s</ci>
                </apply>
                <ci>K_S</ci>
              </apply>
              <ci>K_41</ci>
            </apply>
          </apply>
          <apply>
            <times />
            <apply>
              <plus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">1</cn>
              <apply>
                <divide />
                <ci>glucose_s</ci>
                <ci>K_S</ci>
              </apply>
            </apply>
            <apply>
              <plus />
              <apply>
                <divide />
                <apply>
                  <times />
                  <ci>K_23</ci>
                  <ci>glucose_i</ci>
                </apply>
                <ci>K_S</ci>
              </apply>
              <ci>K_14</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>K_14</ci>
        </apply>
        <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">0</cn>
      </apply>
    </math>
  </component>
  <rdf:RDF xmlns:bqmodel="http://biomodels.net/model-qualifiers/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:opb="http://bhi.washington.edu/OPB#">
    <rdf:Description rdf:about="#GLUT2.glucose_i">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_0">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#entity_0">
              <ro:part_of>
                <rdf:Description rdf:about="#entity_1">
                  <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/fma/FMA:226050" />
                </rdf:Description>
              </ro:part_of>
              <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/chebi/CHEBI:17234" />
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#GLUT2.glucose_s">
      <semsim:isComputationalComponentFor>
        <rdf:Description rdf:about="#property_1">
          <semsim:physicalPropertyOf>
            <rdf:Description rdf:about="#entity_2">
              <ro:part_of>
                <rdf:Description rdf:about="#entity_3">
                  <semsim:hasPhysicalDefinition rdf:resource="http://identifiers.org/fma/FMA:70022" />
                </rdf:Description>
              </ro:part_of>
              <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/chebi/CHEBI:17234" />
            </rdf:Description>
          </semsim:physicalPropertyOf>
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00340" />
        </rdf:Description>
      </semsim:isComputationalComponentFor>
    </rdf:Description>
    <rdf:Description rdf:about="#GLUT2.J_GLUT">
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00592" />           
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/chebi/CHEBI:29101" />
          <semsim:hasPhysicalDefinition rdf:resource="https://identifiers.org/opb/OPB_00340" />
    </rdf:Description>
  </rdf:RDF>
</model>

