<?xml version='1.0' encoding='UTF-8'?>
<model cmeta:id="metaid0" name="SGLT1" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="umol_per_s">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="cm2_per_s">
        <unit units="cm2"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="uA_per_A">
        <unit units="uA"/>
        <unit exponent="-1.0" units="ampere"/>
    </units>
    <units name="um">
        <unit prefix="micro" units="meter"/>
    </units>
    <units name="uA_per_um2">
        <unit units="uA"/>
        <unit exponent="-1.0" units="um2"/>
    </units>
    <units name="per_M4_per_second">
        <unit exponent="-4.0" units="M"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="per_M4_per_second2">
        <unit exponent="-2.0" units="second"/>
        <unit exponent="-4.0" units="M"/>
    </units>
    <units name="S_per_m2">
        <unit units="siemens"/>
        <unit exponent="-1.0" units="m2"/>
    </units>
    <units name="C_per_mol">
        <unit exponent="-1.0" units="mole"/>
        <unit units="coulomb"/>
    </units>
    <units name="mole_per_m2">
        <unit exponent="-1.0" units="m2"/>
        <unit units="mole"/>
    </units>
    <units name="uF_per_cm2">
        <unit exponent="-1.0" units="cm2"/>
        <unit prefix="micro" units="Farad"/>
    </units>
    <units name="per_M">
        <unit exponent="-1.0" units="M"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="M"/>
    </units>
    <units name="per_M3_per_second5">
        <unit exponent="-5.0" units="second"/>
        <unit exponent="-3.0" units="M"/>
    </units>
    <units name="per_volt3_per_second">
        <unit exponent="-1.0" units="second"/>
        <unit exponent="-3.0" units="volt"/>
    </units>
    <units name="per_volt2_per_second">
        <unit exponent="-2.0" units="volt"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="pA_per_cm2">
        <unit prefix="pico" units="ampere"/>
        <unit exponent="-2.0" prefix="centi" units="metre"/>
    </units>
    <units name="cm_per_s">
        <unit units="cm"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="per_volt4_per_second">
        <unit exponent="-1.0" units="second"/>
        <unit exponent="-4.0" units="volt"/>
    </units>
    <units name="per_M2_per_second">
        <unit exponent="-2.0" units="M"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="S">
        <unit units="siemens"/>
    </units>
    <units name="per_second">
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="uF">
        <unit prefix="micro" units="Farad"/>
    </units>
    <units name="Farad">
        <unit exponent="-1.0" units="volt"/>
        <unit units="coulomb"/>
    </units>
    <units name="m3">
        <unit exponent="3.0" units="metre"/>
    </units>
    <units name="per_M_per_second">
        <unit exponent="-1.0" units="M"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="litre_umol_per_mol_per_m3">
        <unit units="litre"/>
        <unit units="umol"/>
        <unit exponent="-1.0" units="m3"/>
        <unit exponent="-1.0" units="mole"/>
    </units>
    <units name="umol">
        <unit prefix="micro" units="mole"/>
    </units>
    <units name="J_per_K_per_mol">
        <unit exponent="-1.0" units="mole"/>
        <unit exponent="-1.0" units="kelvin"/>
        <unit units="joule"/>
    </units>
    <units name="m3_mole_per_litre_per_umol">
        <unit exponent="-1.0" units="umol"/>
        <unit exponent="-1.0" units="litre"/>
        <unit units="m3"/>
        <unit units="mole"/>
    </units>
    <units name="per_umol">
        <unit exponent="-1.0" units="umol"/>
    </units>
    <units name="uA">
        <unit prefix="micro" units="ampere"/>
    </units>
    <units name="per_volt_per_second">
        <unit exponent="-1.0" units="volt"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="mol_per_um2">
        <unit exponent="-1.0" units="um2"/>
        <unit units="mole"/>
    </units>
    <units name="m_per_s">
        <unit exponent="-1.0" units="second"/>
        <unit units="meter"/>
    </units>
    <units name="M">
        <unit units="mole"/>
        <unit exponent="-1.0" units="litre"/>
    </units>
    <units name="M3_per_second">
        <unit exponent="-1.0" units="second"/>
        <unit exponent="3.0" units="M"/>
    </units>
    <units name="M3">
        <unit exponent="3.0" units="M"/>
    </units>
    <units name="mM">
        <unit exponent="-1.0" units="litre"/>
        <unit prefix="milli" units="mole"/>
    </units>
    <units name="uA_per_cm2">
        <unit exponent="-2.0" prefix="centi" units="metre"/>
        <unit units="uA"/>
    </units>
    <units name="m2">
        <unit exponent="2.0" units="metre"/>
    </units>
    <units name="um2">
        <unit exponent="2.0" prefix="micro" units="metre"/>
    </units>
    <units name="umol_per_mol">
        <unit exponent="-1.0" units="mole"/>
        <unit units="umol"/>
    </units>
    <units name="cm2">
        <unit exponent="2.0" prefix="centi" units="metre"/>
    </units>
    <units name="per_meter">
        <unit exponent="-1.0" units="meter"/>
    </units>
    <units name="mV">
        <unit prefix="milli" units="volt"/>
    </units>
    <units name="volt_per_second">
        <unit units="volt"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="M2">
        <unit exponent="2.0" units="M"/>
    </units>
    <units name="um3">
        <unit exponent="3.0" prefix="micro" units="metre"/>
    </units>
    <units name="umol_per_cm2_per_s">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1.0" units="cm2"/>
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="cm">
        <unit prefix="centi" units="metre"/>
    </units>
    <units name="per_second2">
        <unit exponent="-1.0" units="second"/>
    </units>
    <units name="per_mol">
        <unit exponent="-1.0" units="mole"/>
    </units>
    <units name="M_per_second">
        <unit exponent="-1.0" units="second"/>
        <unit units="M"/>
    </units>
    <units name="per_m2">
        <unit exponent="-1.0" units="m2"/>
    </units>
    <component name="SGLT1">
        <variable cmeta:id="SGLT1.t" name="t" units="second"/>
        <variable cmeta:id="SGLT1.epsilon" name="epsilon" units="per_second"/>
        <variable cmeta:id="SGLT1.lambda" name="lambda" units="per_M3_per_second5"/>
        <variable cmeta:id="SGLT1.chi" name="chi" units="M"/>
        <variable cmeta:id="SGLT1.alpha" name="alpha" units="M3"/>
        <variable cmeta:id="SGLT1.beta" name="beta" units="M2"/>
        <variable cmeta:id="SGLT1.gamma" name="gamma" units="M3_per_second"/>
        <variable cmeta:id="SGLT1.phi" name="phi" units="M_per_second"/>
        <variable cmeta:id="SGLT1.k0_12" initial_value="14000" name="k0_12" units="per_second"/>
        <variable cmeta:id="SGLT1.k_21" name="k_21" units="per_second"/>
        <variable cmeta:id="SGLT1.k_32" name="k_32" units="per_second"/>
        <variable cmeta:id="SGLT1.k_34" name="k_34" units="per_second"/>
        <variable cmeta:id="SGLT1.k_43" name="k_43" units="per_second"/>
        <variable cmeta:id="SGLT1.k_45" name="k_45" units="per_second"/>
        <variable cmeta:id="SGLT1.k_54" name="k_54" units="per_second"/>
        <variable cmeta:id="SGLT1.k_25" name="k_25" units="per_second"/>
        <variable cmeta:id="SGLT1.k_52" name="k_52" units="per_second"/>
        <variable cmeta:id="SGLT1.k_56" name="k_56" units="per_second"/>
        <variable cmeta:id="SGLT1.k_65" name="k_65" units="per_second"/>
        <variable cmeta:id="SGLT1.k_61" name="k_61" units="per_second"/>
        <variable cmeta:id="SGLT1.k_16" name="k_16" units="per_second"/>
        <variable cmeta:id="SGLT1.ks_12" name="ks_12" units="per_M2_per_second"/>
        <variable cmeta:id="SGLT1.F" initial_value="96485" name="F" units="C_per_mol"/>
        <variable cmeta:id="SGLT1.Na_m" initial_value="0.105" name="Na_m" units="M"/>
        <variable cmeta:id="SGLT1.glucose_m" initial_value="0.05" name="glucose_m" units="M"/>
        <variable cmeta:id="SGLT1.n_SGLT" initial_value="40000000" name="n_SGLT" units="dimensionless"/>
        <variable cmeta:id="SGLT1.n" initial_value="2" name="n" units="dimensionless"/>
        <variable cmeta:id="SGLT1.z_Na" initial_value="1" name="z_Na" units="dimensionless"/>
        <variable cmeta:id="SGLT1.z_c" initial_value="-2" name="z_c" units="dimensionless"/>
        <variable cmeta:id="SGLT1.alpha_p" initial_value="0.3" name="alpha_p" units="dimensionless"/>
        <variable cmeta:id="SGLT1.mu" name="mu" units="dimensionless"/>
        <variable cmeta:id="SGLT1.R" initial_value="8.314" name="R" units="J_per_K_per_mol"/>
        <variable cmeta:id="SGLT1.T" initial_value="310" name="T" units="kelvin"/>
        <variable cmeta:id="SGLT1.v_mc" initial_value="-0.046" name="v_mc" units="volt"/>
        <variable cmeta:id="SGLT1.k0_21" initial_value="300" name="k0_21" units="per_second"/>
        <variable cmeta:id="SGLT1.k0_32" initial_value="20" name="k0_32" units="per_second"/>
        <variable cmeta:id="SGLT1.k0_34" initial_value="50" name="k0_34" units="per_second"/>
        <variable cmeta:id="SGLT1.k0_43" initial_value="50" name="k0_43" units="per_second"/>
        <variable cmeta:id="SGLT1.k0_45" initial_value="6" name="k0_45" units="per_second"/>
        <variable cmeta:id="SGLT1.k0_54" initial_value="450" name="k0_54" units="per_M_per_second"/>
        <variable cmeta:id="SGLT1.k0_25" initial_value="0.1" name="k0_25" units="per_second"/>
        <variable cmeta:id="SGLT1.k0_56" initial_value="10" name="k0_56" units="per_second"/>
        <variable cmeta:id="SGLT1.k0_65" initial_value="200" name="k0_65" units="per_M2_per_second"/>
        <variable cmeta:id="SGLT1.k0_23" initial_value="15000" name="k0_23" units="per_M_per_second"/>
        <variable cmeta:id="SGLT1.k0_52" initial_value="0.01" name="k0_52" units="per_second"/>
        <variable cmeta:id="SGLT1.k0_61" initial_value="25" name="k0_61" units="per_second"/>
        <variable cmeta:id="SGLT1.k0_16" initial_value="600" name="k0_16" units="per_second"/>
        <variable cmeta:id="SGLT1.delta" initial_value="0.7" name="delta" units="dimensionless"/>
        <variable cmeta:id="SGLT1.glucose_i" initial_value="0.003" name="glucose_i" units="M"/>
        <variable cmeta:id="SGLT1.Na_i" initial_value="0.047" name="Na_i" units="M"/>
        <variable cmeta:id="SGLT1.J_Na_SGLT" name="J_Na_SGLT" units="umol_per_s"/>
        <variable cmeta:id="SGLT1.J_Gl_SGLT" name="J_Gl_SGLT" units="umol_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>ks_12</ci>
                <apply>
                    <times/>
                    <ci>k0_12</ci>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <apply>
                                    <minus/>
                                    <ci>n</ci>
                                </apply>
                                <ci>alpha_p</ci>
                                <ci>mu</ci>
                            </apply>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>k_21</ci>
                <apply>
                    <times/>
                    <ci>k0_21</ci>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>n</ci>
                                <ci>z_Na</ci>
                                <ci>alpha_p</ci>
                                <ci>mu</ci>
                            </apply>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>k_32</ci>
                <ci>k0_32</ci>
            </apply>
            <apply>
                <eq/>
                <ci>k_34</ci>
                <ci>k0_34</ci>
            </apply>
            <apply>
                <eq/>
                <ci>k_43</ci>
                <ci>k0_43</ci>
            </apply>
            <apply>
                <eq/>
                <ci>k_45</ci>
                <ci>k0_45</ci>
            </apply>
            <apply>
                <eq/>
                <ci>k_54</ci>
                <apply>
                    <times/>
                    <ci>k0_54</ci>
                    <ci>glucose_i</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>k_25</ci>
                <ci>k0_25</ci>
            </apply>
            <apply>
                <eq/>
                <ci>k_56</ci>
                <ci>k0_56</ci>
            </apply>
            <apply>
                <eq/>
                <ci>k_65</ci>
                <apply>
                    <times/>
                    <ci>k0_65</ci>
                    <apply>
                        <power/>
                        <ci>Na_i</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>k_61</ci>
                <apply>
                    <times/>
                    <ci>k0_61</ci>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>z_c</ci>
                                <ci>delta</ci>
                                <ci>mu</ci>
                            </apply>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>k_16</ci>
                <apply>
                    <times/>
                    <ci>k0_16</ci>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <apply>
                                    <minus/>
                                    <ci>z_c</ci>
                                </apply>
                                <ci>delta</ci>
                                <ci>mu</ci>
                            </apply>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>k_52</ci>
                <ci>k0_52</ci>
            </apply>
            <apply>
                <eq/>
                <ci>lambda</ci>
                <apply>
                    <times/>
                    <ci>ks_12</ci>
                    <ci>k0_23</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_43</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_54</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_52</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>chi</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>lambda</ci>
                    </apply>
                    <ci>ks_12</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_54</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_54</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_56</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>lambda</ci>
                    </apply>
                    <ci>k0_23</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_34</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_34</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>alpha</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>lambda</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_25</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_34</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_54</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_65</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_56</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                            <ci>k_61</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_56</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_56</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_56</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_16</ci>
                            <ci>k_21</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>gamma</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>lambda</ci>
                    </apply>
                    <ci>k_16</ci>
                    <ci>k_21</ci>
                    <ci>k_65</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_54</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                            <ci>k_52</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                            <ci>k_52</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>phi</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                        </apply>
                        <ci>lambda</ci>
                    </apply>
                    <ci>ks_12</ci>
                    <ci>k_56</ci>
                    <ci>k_61</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_34</ci>
                            <ci>k_45</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_45</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_25</ci>
                            <ci>k_32</ci>
                            <ci>k_43</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>epsilon</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                        </apply>
                        <ci>lambda</ci>
                    </apply>
                    <ci>ks_12</ci>
                    <ci>k0_23</ci>
                    <ci>k_34</ci>
                    <ci>k_45</ci>
                    <ci>k_56</ci>
                    <ci>k_61</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J_Na_SGLT</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <apply>
                                    <minus/>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <ci>n_SGLT</ci>
                            </apply>
                            <cn cellml:units="per_umol" type="e-notation">6.023<sep/>17</cn>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>epsilon</ci>
                                <apply>
                                    <power/>
                                    <ci>Na_m</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <ci>glucose_m</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>phi</ci>
                                <apply>
                                    <power/>
                                    <ci>Na_m</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                            <ci>gamma</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>alpha</ci>
                        <apply>
                            <times/>
                            <ci>beta</ci>
                            <ci>glucose_m</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>chi</ci>
                            <apply>
                                <power/>
                                <ci>Na_m</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>Na_m</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>glucose_m</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J_Gl_SGLT</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">1</cn>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <ci>J_Na_SGLT</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>mu</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>F</ci>
                        <ci>v_mc</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>R</ci>
                        <ci>T</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>k0_52</ci>
                </apply>
                <cn cellml:units="dimensionless">0</cn>
            </apply>
        </math>
    </component>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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    </rdf:RDF>
</model>
