<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="happy2" id="b4da55">
  <units name="concentration_unit" id="b4da56">
    <unit prefix="nano" units="mole" id="b4da58"/>
  </units>
  <units name="flow_rate_unit" id="b4da57">
    <unit units="concentration_unit" id="b4da59"/>
    <unit exponent="-1" prefix="milli" units="second" id="b4da5a"/>
  </units>
  <component name="main" id="b4da5b">
    <variable name="t" units="second" interface="public" id="b4da5c"/>
    <variable name="V_SS" units="flow_rate_unit" interface="public" id="b4da5d"/>
    <variable name="Ao" units="concentration_unit" initial_value="4" interface="public" id="b4da5e"/>
    <variable name="Ai" units="concentration_unit" initial_value="1" interface="public" id="b4da5f"/>
    <variable name="p1" units="dimensionless" initial_value="8.25936442112953" interface="public" id="b4da60"/>
    <variable name="p2" units="dimensionless" initial_value="0.639012082344097" interface="public" id="b4da61"/>
    <variable name="p3" units="dimensionless" initial_value="0.821169803527441" interface="public" id="b4da62"/>
    <variable name="p4" units="dimensionless" initial_value="0.60466868917249" interface="public" id="b4da63"/>
    <variable name="p5" units="dimensionless" initial_value="0.60466868917249" interface="public" id="b4da64"/>
    <variable name="p6" units="dimensionless" initial_value="0.821169803527441" interface="public" id="b4da65"/>
    <variable name="X" units="dimensionless" initial_value="0" interface="public" id="b4da66"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>V_SS</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>p1</ci>
              <ci>Ao</ci>
            </apply>
            <apply>
              <times/>
              <ci>p2</ci>
              <ci>Ai</ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <ci>p3</ci>
            <apply>
              <times/>
              <ci>p4</ci>
              <ci>Ao</ci>
            </apply>
            <apply>
              <times/>
              <ci>p5</ci>
              <ci>Ai</ci>
              <ci>Ao</ci>
            </apply>
            <apply>
              <times/>
              <ci>p6</ci>
              <ci>Ai</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>X</ci>
        </apply>
        <cn cellml:units="dimensionless">0</cn>
      </apply>
    </math>
  </component>
</model>
